CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:46
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "n_photons.tiff")
    Name to assign these images:NADHPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "f_photons.tiff")
    Name to assign these images:FADPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_t1.tiff")
    Name to assign these images:NADHT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_t2.tiff")
    Name to assign these images:NADHT2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_a1[%].tiff")
    Name to assign these images:NADHA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_a2[%].tiff")
    Name to assign these images:NADHA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "f_t1.tiff")
    Name to assign these images:FADT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "f_t2.tiff")
    Name to assign these images:FADT2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "f_a1[%].tiff")
    Name to assign these images:FADA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "f_a2[%].tiff")
    Name to assign these images:FADA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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notes:['Images are 32bit so we have to bring it to a range that is analyzable with CP. We can do either Image Math OR RescalseIntensity, both do the same thing (the previous RescaleIntensity was not set up correctly)']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NADHScaled
    Image or measurement?:Image
    Select the first image:NADHPhotons
    Multiply the first image by:0.00001525902
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:NADHScaled
    Name the output image:IllumNADH
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:NADHScaled
    Name the output image:NADH
    Select the illumination function:IllumNADH
    Select how the illumination function is applied:Subtract

RescaleIntensity:[module_num:8|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enabled:False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
    Select the input image:NADHPhotons
    Name the output image:NADHRescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0,65535
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
Smooth:[module_num:9|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
    Select the input image:NADH
    Name the output image:NADHSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:5
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedNADH
    Image or measurement?:Image
    Select the first image:NADH
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:11|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notes:['0.992 to 0.998']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
    Select the input image:InvertedNADH
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:13|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notes:['Could Help']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
    Select the objects to filter:Nuclei
    Name the output objects:NucleiFilterd
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
    Select the measurement to filter by:AreaShape_MeanRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:14|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:OrigOverlayfiltered
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NucleiFilterd

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:NucleiFilterd
    Name the output objects:NucleiExpand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:NucleiExpand
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NADHScaled
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:NucleiFilterd
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:19|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:RedoxRatio
    Image or measurement?:Image
    Select the first image:NADHPhotons
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FADPhotons
    Multiply the second image by:1.0
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
ImageMath:[module_num:20|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:N_a1t1
    Image or measurement?:Image
    Select the first image:NADHA1
    Multiply the first image by:0.01
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    Image or measurement?:Image
    Select the second image:NADHT1
    Multiply the second image by:1.0
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
ImageMath:[module_num:21|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:N_a2t2
    Image or measurement?:Image
    Select the first image:NADHA2
    Multiply the first image by:0.01
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    Image or measurement?:Image
    Select the second image:NADHT2
    Multiply the second image by:1.0
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
ImageMath:[module_num:22|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:NADHTm
    Image or measurement?:Image
    Select the first image:N_a1t1
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:N_a2t2
    Multiply the second image by:1
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
ImageMath:[module_num:23|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:F_a1t1
    Image or measurement?:Image
    Select the first image:FADA1
    Multiply the first image by:0.01
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    Image or measurement?:Image
    Select the second image:FADT1
    Multiply the second image by:1.0
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
ImageMath:[module_num:24|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:F_a2t2
    Image or measurement?:Image
    Select the first image:FADA2
    Multiply the first image by:0.01
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    Image or measurement?:Image
    Select the second image:FADT2
    Multiply the second image by:1.0
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
ImageMath:[module_num:25|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:FADTm
    Image or measurement?:Image
    Select the first image:F_a2t2
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:F_a1t1
    Multiply the second image by:1
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
MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:RedoxRatio
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:27|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
    Hidden:1
    Select an image to measure:NADHTm
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:28|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
    Hidden:1
    Select an image to measure:FADTm
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:29|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
    Hidden:1
    Select an image to measure:NADHT1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:30|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
    Hidden:1
    Select an image to measure:NADHT2
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:31|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
    Hidden:1
    Select an image to measure:NADHA1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:32|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
    Hidden:1
    Select an image to measure:NADHPhotons
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:33|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
    Hidden:1
    Select an image to measure:FADT1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:34|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
    Hidden:1
    Select an image to measure:FADT2
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:35|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
    Hidden:1
    Select an image to measure:FADA1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:36|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
    Hidden:1
    Select an image to measure:FADPhotons
    Select objects to measure:Cytoplasm

ImageMath:[module_num:37|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:4
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Display
    Image or measurement?:Image
    Select the first image:NADHScaled
    Multiply the first image by:1
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    Image or measurement?:Image
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
DisplayDataOnImage:[module_num:38|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
    Display object or image measurements?:Object
    Select the input objects:NucleiFilterd
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Display
    Text color:red
    Name the output image that has the measurements displayed:displayedobjects
    Font size (points):12
    Number of decimals:0
    Image elements to save:Figure
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:displayedobjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellLocation
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\SkalaLab\\Data\\2P\\VanderHeiden\\cellcycle\\cellCycle inhibitors\\20190502 double thymidine\\spcimageanalysis\\cellprofiler test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:40|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Display
    Name the output image:NADHoverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:NucleiFilterd
    Select outline color:#FB02FE
    Select objects to display:Cells

OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Display
    Name the output image:NADHNucleioverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:NucleiFilterd

OverlayOutlines:[module_num:42|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Display
    Name the output image:CytoOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0106
    Select objects to display:Cytoplasm

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:NADHoverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiCellOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\SkalaLab\\Data\\2P\\VanderHeiden\\cellcycle\\cellCycle inhibitors\\20190502 double thymidine\\spcimageanalysis\\cellprofiler test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:NADHNucleioverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\SkalaLab\\Data\\2P\\VanderHeiden\\cellcycle\\cellCycle inhibitors\\20190502 double thymidine\\spcimageanalysis\\cellprofiler test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:CytoOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\SkalaLab\\Data\\2P\\VanderHeiden\\cellcycle\\cellCycle inhibitors\\20190502 double thymidine\\spcimageanalysis\\cellprofiler test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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