CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:46
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*) (?P<ImageNumber>[0-9]{1})n_photons
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'NADHPhotons': u'FileName', u'MaskOut': u'FileName', u'CellMask': u'FileName', u'NucleiMask': u'FileName', u'Extra': u'FileName'}, {u'NADHPhotons': u'ImageNumber', u'MaskOut': u'ImageNumber', u'CellMask': u'ImageNumber', u'NucleiMask': u'ImageNumber', u'Extra': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "n_photons.tiff")
    Name to assign these images:NADHPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_0.tiff")
    Name to assign these images:NucleiMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_1.tiff")
    Name to assign these images:CellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_2.tiff")
    Name to assign these images:MaskOut
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_3.tiff")
    Name to assign these images:Extra
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NADHScaled
    Image or measurement?:Image
    Select the first image:NADHPhotons
    Multiply the first image by:0.00001525902
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:6|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
    Select the input image:NADHPhotons
    Name the output image:NADHRescaled
    Rescaling method:Divide by the image's maximum
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:NADHRescaled
    Name the output image:IllumNADHLarge
    Select how the illumination function is calculated:Background
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    Block size:150
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:NADHRescaled
    Name the output image:NADHLargeBG
    Select the illumination function:IllumNADHLarge
    Select how the illumination function is applied:Subtract

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:NADHLargeBG
    Name the output image:IllumNADH
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Test this']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
    Select the input image:NADHLargeBG
    Name the output image:NADH
    Select the illumination function:IllumNADH
    Select how the illumination function is applied:Subtract

Smooth:[module_num:11|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
    Select the input image:NADH
    Name the output image:NADHSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:12|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
    Select the input image:NADHLargeBG
    Name the output image:NADHLargeBGSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ImageMath:[module_num:13|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
    Operation:Invert
    Raise the power of the result by:4
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedNADH
    Image or measurement?:Image
    Select the first image:NADH
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:14|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
    Select the image to measure:NADHLargeBGSmooth
    Measure the intensity only from areas enclosed by objects?:No
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
Threshold:[module_num:15|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
    Select the input image:NADHLargeBGSmooth
    Name the output image:WholeTissue
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,0.1
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_NADHLargeBGSmooth
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
IdentifyPrimaryObjects:[module_num:16|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notes:['If the thresh range doesn’t work, use the Thresholdedimage instead of the verysmoothed image']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
    Select the input image:WholeTissue
    Name the primary objects to be identified:IPOTissue
    Typical diameter of objects, in pixel units (Min,Max):100,100000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.8
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
EditObjectsManually:[module_num:17|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notes:['Here you can apply any manual changes to the tissue object']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enabled:False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
    Select the objects to be edited:IPOTissue
    Name the edited objects:EditedIPOTissue
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:NADHRescaled
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:18|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notes:['8 might be a lot for all the tissues']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
    Select the input objects:IPOTissue
    Name the output objects:ShrunkenTissue
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No

Smooth:[module_num:19|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
    Select the input image:NucleiMask
    Name the output image:SmoothNucleiMask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:20|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
    Select the input image:NADHRescaled
    Name the output image:SmoothNADHRescale
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
MaskImage:[module_num:21|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notes:['Masked by shrunken or the IPo tissue?', '']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
    Select the input image:SmoothNucleiMask
    Name the output image:SmoothedNucleiMaskInTissue
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:22|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notes:['by linestructure enh maybe can detect cells']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
    Select the input image:SmoothNADHRescale
    Name the output image:EnhForCell
    Select the operation:Enhance
    Feature size:15
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Line structures
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
EnhanceOrSuppressFeatures:[module_num:23|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notes:['Have to try cell detection with and with out removing this Enh']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
    Select the input image:NADHSmooth
    Name the output image:EnhanceorSuppressFeatures
    Select the operation:Enhance
    Feature size:3
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
ImageMath:[module_num:24|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notes:['Instead of Mask, used SmoothedMaskedNuclei, then remove the next Smooth module', '', 'Bring the Masking in Tissue and Thresh after Sub and Smooth']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SubNADH
    Image or measurement?:Image
    Select the first image:SmoothedNucleiMaskInTissue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:0.5
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
Threshold:[module_num:25|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notes:['What if we remove the threshold?']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
    Select the input image:NADHLargeBGSmooth
    Name the output image:HighThreshTissue
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.11,1.0
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
Closing:[module_num:26|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
    Select the input image:HighThreshTissue
    Name the output image:Closing
    Structuring element:disk,2

MaskImage:[module_num:27|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notes:['SmoothedSubNADH to SubNADH']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
    Select the input image:SubNADH
    Name the output image:MaskedTissueThresh
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:28|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
    Select the input objects:IPOTissue
    Name the output objects:VeryShrunkenTissue
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyPrimaryObjects:[module_num:29|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notes:['Try this for 10', 'maybe increase the size from 5 to 8, 9?', '', 'and mask with threshold', '—>after 10: check why some nucleis are missing ', 'Missing some nuclei —> from 0.35 to 0.3']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
    Select the input image:MaskedTissueThresh
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:12
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.35,1
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:30|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notes:['Do not Subtract']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MathEnhForCell
    Image or measurement?:Image
    Select the first image:EnhForCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:2
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
MaskImage:[module_num:31|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
    Select the input image:MathEnhForCell
    Name the output image:MaskedMathEnhForCell
    Use objects or an image as a mask?:Objects
    Select object for mask:VeryShrunkenTissue
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:32|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:MaskedMathEnhForCell
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:30
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:33|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:34|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#FB02FE
    Select objects to display:IPOTissue

OverlayOutlines:[module_num:36|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:CellOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#FB02FE
    Select objects to display:Cells

DisplayDataOnImage:[module_num:37|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NADHRescaled
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ConvertObjectsToImage:[module_num:38|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
    Select the input objects:Nuclei
    Name the output image:CPNucleiMask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:39|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
    Select the input objects:Cells
    Name the output image:CPCellMask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:NADH
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CPNADH
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:CPNucleiMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CPNucleiMask
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:CPCellMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CPCellMask
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:CellOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DisplayImage
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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