CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:94
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*) (?P<ImageNumber>[0-9]{1})n_photons
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'NADHPhotons': u'FileName', u'MaskOut': u'FileName', u'CellMask': u'FileName', u'NucleiMask': u'FileName', u'Extra': u'FileName'}, {u'NADHPhotons': u'ImageNumber', u'MaskOut': u'ImageNumber', u'CellMask': u'ImageNumber', u'NucleiMask': u'ImageNumber', u'Extra': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "n_photons.tiff")
    Name to assign these images:NADHPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_0.tiff")
    Name to assign these images:NucleiMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_1.tiff")
    Name to assign these images:CellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_2.tiff")
    Name to assign these images:MaskOut
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "n_photons_Probabilities_3.tiff")
    Name to assign these images:Extra
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NADHScaled
    Image or measurement?:Image
    Select the first image:NADHPhotons
    Multiply the first image by:0.00001525902
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:6|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
    Select the input image:NADHPhotons
    Name the output image:NADHRescaled
    Rescaling method:Divide by the image's maximum
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:NADHRescaled
    Name the output image:IllumNADHLarge
    Select how the illumination function is calculated:Background
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    Block size:150
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:NADHRescaled
    Name the output image:NADHLargeBG
    Select the illumination function:IllumNADHLarge
    Select how the illumination function is applied:Subtract

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:NADHLargeBG
    Name the output image:IllumNADH
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Test this']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
    Select the input image:NADHLargeBG
    Name the output image:NADH
    Select the illumination function:IllumNADH
    Select how the illumination function is applied:Subtract

Smooth:[module_num:11|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
    Select the input image:NADH
    Name the output image:NADHSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:12|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
    Select the input image:NADHLargeBG
    Name the output image:NADHLargeBGSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ImageMath:[module_num:13|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
    Operation:Invert
    Raise the power of the result by:4
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedNADH
    Image or measurement?:Image
    Select the first image:NADH
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:14|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
    Select the image to measure:NADHLargeBGSmooth
    Measure the intensity only from areas enclosed by objects?:No
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
Threshold:[module_num:15|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
    Select the input image:NADHLargeBGSmooth
    Name the output image:WholeTissue
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,0.1
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_NADHLargeBGSmooth
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
IdentifyPrimaryObjects:[module_num:16|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notes:['If the thresh range doesn’t work, use the Thresholdedimage instead of the verysmoothed image']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
    Select the input image:WholeTissue
    Name the primary objects to be identified:IPOTissue
    Typical diameter of objects, in pixel units (Min,Max):100,100000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.8
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
ExpandOrShrinkObjects:[module_num:17|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notes:['8 might be a lot for all the tissues']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
    Select the input objects:IPOTissue
    Name the output objects:ShrunkenTissue
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No

ImageMath:[module_num:18|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notes:['Decide btw NADH and NADHSmooth']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
    Operation:Invert
    Raise the power of the result by:4
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:NADHSmooth
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:19|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
    Select the input image:NucleiMask
    Name the output image:SmoothNucleiMask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:20|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
    Select the input image:NADHRescaled
    Name the output image:SmoothNADHRescale
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
MaskImage:[module_num:21|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notes:['Masked by shrunken or the IPo tissue?', '']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
    Select the input image:SmoothNucleiMask
    Name the output image:SmoothedNucleiMaskInTissue
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

MaskImage:[module_num:22|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notes:['Decide if use the IPOTissue for mask or the ShrunkenTissue', '']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
    Select the input image:NucleiMask
    Name the output image:NucleiMaskInTissue
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:23|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notes:['by linestructure enh maybe can detect cells']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
    Select the input image:SmoothNADHRescale
    Name the output image:EnhForCell
    Select the operation:Enhance
    Feature size:15
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Line structures
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
ImageMath:[module_num:24|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
    Operation:Invert
    Raise the power of the result by:5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:EnhInverted
    Image or measurement?:Image
    Select the first image:EnhForCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:25|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notes:['Have to try cell detection with and with out removing this Enh']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
    Select the input image:NADHSmooth
    Name the output image:EnhanceorSuppressFeatures
    Select the operation:Enhance
    Feature size:3
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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
ImageMath:[module_num:26|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:TestEnhInv
    Image or measurement?:Image
    Select the first image:EnhanceorSuppressFeatures
    Multiply the first image by:5
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    Image or measurement?:Image
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
ImageMath:[module_num:27|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notes:['Instead of Mask, used SmoothedMaskedNuclei, then remove the next Smooth module', '', 'Bring the Masking in Tissue and Thresh after Sub and Smooth']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SubNADH
    Image or measurement?:Image
    Select the first image:SmoothedNucleiMaskInTissue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:0.5
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
ImageMath:[module_num:28|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notes:['Instead of SmoothEnhInverted, used EnhInverted']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SubEnhInverted
    Image or measurement?:Image
    Select the first image:EnhInverted
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:0.5
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
Smooth:[module_num:29|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
    Select the input image:EnhForCell
    Name the output image:SmoothEnhForCell
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
ImageMath:[module_num:30|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImgMathForCells
    Image or measurement?:Image
    Select the first image:SmoothEnhForCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:2
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
MaskImage:[module_num:31|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
    Select the input image:SubEnhInverted
    Name the output image:MskSubEnhInv
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

MaskImage:[module_num:32|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notes:['SmoothedEnhInverted to EnhInverted']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
    Select the input image:EnhInverted
    Name the output image:MskSbEnhInv2
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

Threshold:[module_num:33|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notes:['What if we remove the threshold?']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
    Select the input image:NADHLargeBGSmooth
    Name the output image:HighThreshTissue
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.11,1.0
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
Closing:[module_num:34|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
    Select the input image:HighThreshTissue
    Name the output image:Closing
    Structuring element:disk,2

MaskImage:[module_num:35|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notes:['SmoothedSubNADH to SubNADH']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
    Select the input image:SubNADH
    Name the output image:MaskedTissueThresh1
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

MaskImage:[module_num:36|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
    Select the input image:SmoothedNucleiMaskInTissue
    Name the output image:SmoothMaskedNucleiThresh1
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

MaskImage:[module_num:37|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
    Select the input image:NucleiMaskInTissue
    Name the output image:MaskedinThresh1
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

MaskImage:[module_num:38|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
    Select the input image:NucleiMask
    Name the output image:NucleiMaskinThresh1
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

MaskImage:[module_num:39|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
    Select the input image:ImageAfterMath
    Name the output image:TestImgMath
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:40|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
    Select the input objects:IPOTissue
    Name the output objects:VeryShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:41|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
    Select the input image:TestEnhInv
    Name the output image:TestMaskedEnhInvforCell
    Use objects or an image as a mask?:Objects
    Select object for mask:VeryShrunkenNuclei
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    Invert the mask?:No

Smooth:[module_num:42|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enabled:False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
    Select the input image:TestImgMath
    Name the output image:TestSmoothImgMath
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
Threshold:[module_num:43|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
    Select the input image:TestImgMath
    Name the output image:ThresholdTest
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:8
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.7,1
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
MaskImage:[module_num:44|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
    Select the input image:TestImgMath
    Name the output image:TestMask
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdTest
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:45|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notes:['Try this for 10', 'maybe increase the size from 5 to 8, 9?', '', 'and mask with threshold', '—>after 10: check why some nucleis are missing ', 'Missing some nuclei —> from 0.35 to 0.3']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
    Select the input image:MaskedTissueThresh1
    Name the primary objects to be identified:IPONuclei1
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:12
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.35,1
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    Two-class or three-class thresholding?:Two classes
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
EditObjectsManually:[module_num:46|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notes:['Optional']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enabled:False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
    Select the objects to be edited:IPONuclei1
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:MaskedTissueThresh1
    Allow overlapping objects?:No

IdentifyPrimaryObjects:[module_num:47|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notes:['pretty ok, just decrease the size 10 to 7', 'it’s not detecting everything, check if it’s due to size or intensity? (maybe have to decrease smoothing from 1.344 to 1 )', 'just increased the smoothing filter from 10 to 12', '']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
    Select the input image:SmoothMaskedNucleiThresh1
    Name the primary objects to be identified:IPONuclei2
    Typical diameter of objects, in pixel units (Min,Max):7,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:14
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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
IdentifyPrimaryObjects:[module_num:48|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notes:['Better, Try lower threshold or no shrink', 'Missing some nuclei —> —> from 0.35 to 0.3']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
    Select the input image:MaskedinThresh1
    Name the primary objects to be identified:IPONuclei3
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:14
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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
IdentifyPrimaryObjects:[module_num:49|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notes:['lower bound 0.2 to 0.3', '', 'Not the best, not good—bring it into the tissue']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
    Select the input image:NucleiMaskinThresh1
    Name the primary objects to be identified:IPONuclei4
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:14
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:50|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MathCellMask
    Image or measurement?:Image
    Select the first image:CellMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:2
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
ImageMath:[module_num:51|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MathEnhForCell
    Image or measurement?:Image
    Select the first image:EnhForCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceorSuppressFeatures
    Multiply the second image by:2
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
MaskImage:[module_num:52|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
    Select the input image:MathCellMask
    Name the output image:MaskedMathCellMask
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenTissue
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    Invert the mask?:No

MaskImage:[module_num:53|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
    Select the input image:MathEnhForCell
    Name the output image:MaskedMathEnhForCell
    Use objects or an image as a mask?:Objects
    Select object for mask:VeryShrunkenNuclei
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:54|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
    Select the input objects:IPONuclei1
    Name the objects to be identified:IDCells1
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:TestMaskedEnhInvforCell
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:55|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
    Select the input objects:IPONuclei2
    Name the objects to be identified:IDCells2
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedMathCellMask
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:56|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
    Select the input objects:IPONuclei2
    Name the objects to be identified:IDCells3
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:MaskedMathEnhForCell
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:57|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notes:['']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
    Select the input objects:IPONuclei1
    Name the objects to be identified:IDCells4
    Select the method to identify the secondary objects:Distance - B
    Select the input image:MaskedMathEnhForCell
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:58|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:NucleiOverlay_1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IPONuclei1
    Select outline color:#FB02FE
    Select objects to display:IPOTissue

OverlayOutlines:[module_num:59|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notes:['Ok']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:NucleiOverlay_2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IPONuclei2
    Select outline color:#FB02FE
    Select objects to display:IPOTissue

OverlayOutlines:[module_num:60|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:NucleiOverlay_3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IPONuclei3
    Select outline color:#FB02FE
    Select objects to display:IPOTissue

OverlayOutlines:[module_num:61|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:NucleiOverlay_4
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IPONuclei4
    Select outline color:#FB02FE
    Select objects to display:IPOTissue

OverlayOutlines:[module_num:62|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:CellOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IPONuclei1
    Select outline color:#FB02FE
    Select objects to display:IDCells1

OverlayOutlines:[module_num:63|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:CellOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FE
    Select objects to display:IDCells2
    Select outline color:#20FEFE
    Select objects to display:IPONuclei2

OverlayOutlines:[module_num:64|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:CellOverlay3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#20FEFE
    Select objects to display:IPONuclei2
    Select outline color:#FB02FE
    Select objects to display:IDCells3

OverlayOutlines:[module_num:65|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADH
    Name the output image:CellOverlay4
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#20FEFE
    Select objects to display:IPONuclei1
    Select outline color:#FB02FE
    Select objects to display:IDCells4

DisplayDataOnImage:[module_num:66|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NADHRescaled
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ConvertObjectsToImage:[module_num:67|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
    Select the input objects:IPONuclei1
    Name the output image:NucleiMask1
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:68|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
    Select the input objects:IPONuclei2
    Name the output image:NucleiMask2
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:69|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
    Select the input objects:IPONuclei3
    Name the output image:NucleiMask3
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:70|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
    Select the input objects:IPONuclei4
    Name the output image:NucleiMask4
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:71|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
    Select the input objects:IDCells1
    Name the output image:CellMask1
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:72|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
    Select the input objects:IDCells2
    Name the output image:CellMask2
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:73|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
    Select the input objects:IDCells3
    Name the output image:CellMask3
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:74|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
    Select the input objects:IDCells4
    Name the output image:CellMask4
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:75|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
    Select the type of image to save:Image
    Select the image to save:NADH
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:First
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask1
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiMask1
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask2
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiMask2
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask3
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiMask3
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:79|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask4
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiMask4
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:80|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
    Select the type of image to save:Image
    Select the image to save:CellMask1
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellMask1
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:81|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
    Select the type of image to save:Image
    Select the image to save:CellMask2
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellMask2
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:82|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
    Select the type of image to save:Image
    Select the image to save:CellMask3
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellMask3
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:83|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
    Select the type of image to save:Image
    Select the image to save:CellMask4
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellMask4
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:84|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay_1
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay1
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay_2
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay2
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:86|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay_3
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay3
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:87|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay_4
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay4
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:88|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay_5
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiOverlay5
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:89|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:HighThreshTissue
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Thresh1
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:90|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Threshold3
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Thresh3
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:91|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOverlay1
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cell1
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:92|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOverlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cell2
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:93|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOverlay3
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cell3
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:94|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOverlay4
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cell4
    Saved file format:tiff
    Output file location:Default Output Folder|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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