CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<CellType>.*)-(?P<ImageNumber>[0-9]{3})-Ch(?P<Channel>[0-9])-_(?P<ImageType>.*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<CellType>.*)_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigNADH': u'CellType', u'IllumNADH': u'CellType'}, {u'OrigNADH': u'ImageNumber', u'IllumNADH': None}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ImageType "photons.tiff") (metadata does Channel "2") (metadata does CellType "Tcells")
    Name to assign these images:OrigNADH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cells_IllumNADH.npy")
    Name to assign these images:IllumNADH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:OrigNADH
    Name the output image:NADHRescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,65535
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:NADHRescaled
    Name the output image:NADH
    Select the illumination function:IllumNADH
    Select how the illumination function is applied:Divide

Smooth:[module_num:7|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
    Select the input image:NADH
    Name the output image:SmoothedNADH
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Threshold:[module_num:8|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notes:['Lower bound: 0.00018', '']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
    Select the input image:NADH
    Name the output image:CellMask
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0,0.00012
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
Opening:[module_num:9|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
    Select the input image:CellMask
    Name the output image:OpeningCellMask
    Structuring element:disk,2

IdentifyPrimaryObjects:[module_num:10|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notes:['Better', 'Consistant performance between images (at least 2) without changing anything', '', 'For 4: Shape Shape to Intensity Intensity', '', 'Lower thresh of 0 doesn’t work well here, keep 0.00015']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
    Select the input image:SmoothedNADH
    Name the primary objects to be identified:SmoothedCellRegion
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,0.00012
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
MeasureImageIntensity:[module_num:11|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
    Select the image to measure:SmoothedNADH
    Measure the intensity only from areas enclosed by objects?:No
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
Threshold:[module_num:12|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
    Select the input image:SmoothedNADH
    Name the output image:ThresholdActivatedRegion
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_SmoothedNADH
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
Opening:[module_num:13|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
    Select the input image:ThresholdActivatedRegion
    Name the output image:OpeningThresholdActivatedRegion
    Structuring element:disk,2

ConvertImageToObjects:[module_num:14|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
    Select the input image:OpeningThresholdActivatedRegion
    Name the output object:ActivatedRegionObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:SmoothedNADH
    Name the primary objects to be identified:IPOActivatedRegion
    Typical diameter of objects, in pixel units (Min,Max):2,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_SmoothedNADH
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
MaskImage:[module_num:16|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notes:['The objects could be used instead of the thresholded image']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
    Select the input image:CellMask
    Name the output image:MaskNuclei
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdActivatedRegion
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:17|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notes:['don’t remove to show them how they can adjust', 'Use the FINAl IPO for Cell here']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
    Select the input objects:SmoothedCellRegion
    Name the output objects:ShrunkenCell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:18|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
    Select the input image:MaskNuclei
    Name the output image:MaskedNucleiRegion
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenCell
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    Invert the mask?:No

Opening:[module_num:19|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
    Select the input image:MaskedNucleiRegion
    Name the output image:OpeningMaskedNuclei
    Structuring element:disk,2

ConvertImageToObjects:[module_num:20|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
    Select the input image:OpeningMaskedNuclei
    Name the output object:NucleiObject
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:21|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notes:['Better']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
    Select objects to be masked:SmoothedCellRegion
    Name the masked objects:NucleiImageMasked
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:OpeningMaskedNuclei
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:22|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
    Parent objects:SmoothedCellRegion
    Child objects:ActivatedRegionObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cytoplasm
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
ImageMath:[module_num:23|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
    Operation:None
    Raise the power of the result by:0.3
    Multiply the result by:6
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Display
    Image or measurement?:Image
    Select the first image:NADH
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OpeningMaskedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigNADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OpeningThresholdActivatedRegion
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigNADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoMask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OpeningCellMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigNADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Display
    Name the output image:SmoothedOrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:SmoothedCellRegion

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:SmoothedOrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigNADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellOutline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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